PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['participantID'], expName, expInfo['date'])
  Experiment info = {'participantID': '["A052", "A196", "A226", "A544", "A545", "B630","E227", "G600", "M248", "M617", "M811", "M871", "P430", "P433", "V263", "V556", "V897", "Y189", "K051"]'}
  Full-screen window = True
  Monitor = fortis_m
  Save excel file = True
  Save log file = False
  Save psydat file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(0.8824, 1.0000, 1.0000)
  expName = idea_eval
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    TextComponent inastructionText
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 4
      font = Courier New
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      wrapWidth = 1.3
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      text:
        Добро пожаловать на второй этап исследования!

        Сегодня вам предстоит поработать с материалами  предыдущей встречи. Вы увидите списки идей, которые записали участники, вспоминая свои собственные идеи, после того, как закончили выполнять задание, придумывая необычное использование предмета.
        Ваша задача — оценить эти идеи по нескольким критериям.

        Нажмите [ПРОБЕЛ], чтобы продолжить.
    KeyboardComponent instructionsButton
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine thank_you
    RoutineSettingsComponent thank_you
      saveStartStop = False
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    TextComponent thankYouText
      color = black
      font = Courier New
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
      text = Благодарим за участие!
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  Routine confidence_evaluation
    RoutineSettingsComponent confidence_evaluation
      saveStartStop = False
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    TextComponent confidenceText
      color = $(-0.9294, -0.9608, -0.7412)
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Насколько вы уверены в том, что именно Ваш партнер является автором данной идеи?
      wrapWidth = 1.3
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    CodeComponent changeObserverText
      Code Type = Auto->JS
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      Begin Routine:
        if currentRole == 'observation':
            confidenceText.text = 'Насколько вы уверены в том, что именно этот участник является автором данной идеи?'
    TextboxComponent confidenceIdeaText
      autoLog = False
      bold = True
      borderWidth = 0
      color = $(-0.9294, -0.9608, -0.7412)
      editable = False
      font = Courier New
      letterHeight = 0.05
      pos = (0, 0.10)
      saveStartStop = False
      size = (1.3, 0.5)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = ...
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    CodeComponent skipConfidenceRoutine
      Code Type = Auto->JS
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      Begin Routine:
        if len(rememberedIdeas) == 0:
            continueRoutine = False
        else:
            currentСonfIdea = rememberedIdeas[confidence_loop.thisN]
            confidenceIdeaText.text = (f'«{currentСonfIdea}»')
            confidenceSlider.reset()
      End Routine:
        score = confidenceSlider.getRating()
        if score is None:
            score = -1

        confidenceScores[currentСonfIdea] = score

        thisExp.addData('conf_idea', currentСonfIdea)
        thisExp.addData('conf_score', score)
    TextComponent confidenceTextHint
      color = $(-0.9294, -0.9608, -0.7412)
      font = Courier New
      letterHeight = 0.03
      pos = (0, -0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = 0% — Идея, навеянная другой идеей      100% — Точно оригинальная идея
      wrapWidth = 1.8
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    SliderComponent confidenceSlider
      borderColor = $(0.6000, 0.6941, 0.8510)
      fillColor = $(-0.4353, -0.5216, 0.0902)
      font = Courier New
      forceEndRoutine = False
      granularity = 0
      labels = ('0%', '50%', '100%')
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      size = (1.0, 0.06)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    TextComponent buttonText
      color = $(-0.9294, -0.9608, -0.7412)
      font = Courier New
      letterHeight = 0.035
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Нажмите ENTER для подтверждения
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    KeyboardComponent confidenceProceedButton
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine source_evaluation
    RoutineSettingsComponent source_evaluation
      saveStartStop = False
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    TextboxComponent sourceIdeaLabel
      autoLog = False
      bold = True
      borderWidth = 0
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 5
      editable = False
      font = Courier New
      letterHeight = 0.05
      pos = (0, 0.30)
      saveStartStop = False
      size = (1.3, 0.5)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = ...
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    TextComponent sourceEvaluationText
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 5
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      wrapWidth = 1.3
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      text:
        Вы отметили, что эта идея, по вашему мнению,  была навеяна другой идеей из обсуждения.

        Опишите, какая идея, на ваш взгляд, могла послужить для неё отправной точкой:
    TextboxComponent sourceEvaluationTextBox
      autoLog = False
      bold = False
      borderColor = $(0.4353, 0.6314, 0.7804)
      borderWidth = 1
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 5
      editable = True
      fillColor = $(0.5451, 0.7647, 0.8745)
      font = Courier New
      letterHeight = 0.05
      placeholder = Введите ваш ответ здесь...
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.4, 0.2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent sourceButtonText
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 5
      font = Courier New
      letterHeight = 0.035
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Нажмите ENTER для подтверждения
      wrapWidth = 1.3
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    KeyboardComponent sourceEvaluationButton
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent prepareIdeasForSource
      Code Type = Auto->JS
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      Begin Routine:
        currentSourceIdea = ideasForSource[source_loop.thisN]
        sourceIdeaLabel.text = f'Идея: «{currentSourceIdea}»'
    CodeComponent formatSourceText
      Code Type = Auto->JS
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      End Routine:
        sourceText = sourceEvaluationTextBox.getText()
        sourceText = sourceText.strip() if sourceText else ''

        sourceTexts[currentSourceIdea] = sourceText

        thisExp.addData('source_idea', currentSourceIdea)
        thisExp.addData('source_text', sourceText)
  Routine confidence_evaluation_instruction
    RoutineSettingsComponent confidence_evaluation_instruction
      saveStartStop = False
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    CodeComponent showOnce
      Code Type = Auto->JS
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      Begin Routine:
        if ceInstructionCount >= 1 or len(rememberedIdeas) == 0:
            continueRoutine = False
        else:
            ceInstructionCount += 1
    TextComponent ceInstructionText
      color = $(-0.9294, -0.9608, -0.7412)
      font = Courier New
      letterHeight = 0.05
      pos = (0, 0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Сейчас Вам будет предложено оценить, насколько Вы уверены в том, что те идеи, которые участник записал, как предложенные им, действительно были предложены и озвучены им. Оценивайте именно свою собственную, субъективную уверенность.
      wrapWidth = 1.3
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    TextComponent ceInstructionButtonText
      color = $(-0.9294, -0.9608, -0.7412)
      font = Courier New
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Нажмите [ПРОБЕЛ] для начала.
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    KeyboardComponent ceInstructionProceedButton
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine save_routine
    RoutineSettingsComponent save_routine
      saveStartStop = False
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    CodeComponent saveTableRows
      Code Type = Auto->JS
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      Begin Routine:
        if skipConfidence:
            thisExp.addData('confidence', '')
        if skipSource:
            thisExp.addData('source_description', '')

        continueRoutine = False
  Routine routine_instructions
    RoutineSettingsComponent routine_instructions
      saveStartStop = False
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    TextComponent routineInstructionsText
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 2
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = На предыдущей встрече вы предлагали идеи для этого предмета вместе с партнёром:
      wrapWidth = 1.3
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    TextComponent routineInstructionsObserverText
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 2
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = На предыдущей встрече участники предлагали идеи для этого предмета:
      wrapWidth = 1.3
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    TextboxComponent coreItemText
      autoLog = False
      bold = True
      borderWidth = 0
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 2
      editable = False
      font = Courier New
      letterHeight = 0.06
      pos = (0, 0.09)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $currentBaseItem
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    TextComponent participantRoleText
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 2
      font = Courier New
      letterHeight = 0.04
      pos = (0, -0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Вы выступали в роли:
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    TextboxComponent roleText
      autoLog = False
      bold = True
      borderWidth = 0
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 2
      editable = False
      font = Courier New
      letterHeight = 0.06
      pos = (0, -0.17)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $currentRole
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    TextComponent routineInstructionsButtonText
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 2
      font = Courier New
      letterHeight = 0.03
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Нажмите [ПРОБЕЛ] для начала.
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    KeyboardComponent coreItemButton
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent onBaseItemChange
      Code Type = Auto->JS
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      Begin Routine:
        currentIndex = currentLoop.thisN
        ideaData = allIdeas[currentIndex]

        currentBaseItem = ideaData['baseItem']
        currentRole = ideaData['blockType']

        if currentBaseItem == prevBaseItem and currentRole == prevRole:
            continueRoutine = False
        else:
            coreItemText.text = f'{currentBaseItem}'
            roleText.text = 'Наблюдатель' if currentRole == 'observation' else 'Генератор идей'

        if currentRole == 'observation':
            routineInstructionsObserverText.opacity = 1.0
            routineInstructionsText.opacity = 0
        else:
            routineInstructionsObserverText.opacity = 0
            routineInstructionsText.opacity = 1.0
      End Routine:
        prevBaseItem = currentBaseItem
        prevRole = currentRole
  Routine startup_routine
    RoutineSettingsComponent startup_routine
      saveStartStop = False
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    CodeComponent startupCode
      Code Type = Auto->JS
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      Begin Experiment:
        import csv

        participantId = expInfo['participantID']
        stimuliPath = f'./stimuli/{participantId}_ideas.csv'

        with open(stimuliPath, encoding='utf-8') as f:
            reader = csv.DictReader(f)
            allIdeas = list(reader)

        totalIdeas = len(allIdeas)

        ideaStims = []
        for i in range(20):
            stim = visual.TextStim(
                win,
                text='',
                pos=(0, 0.20 - i * 0.07),
                height=0.033,
                font='Courier New',
                color='#090521',
                anchorHoriz='left',
                alignText='left',
                wrapWidth=0.75
            )
            ideaStims.append(stim)

        ideaStimsObs = []
        for i in range(20):
            stim = visual.TextStim(
                win,
                text='',
                pos=(0.15, 0.25 - i * 0.07),
                height=0.033,
                font='Courier New',
                color='#090521',
                anchorHoriz='left',
                alignText='left',
                wrapWidth=0.7
            )
            ideaStimsObs.append(stim)

        headerLeft = visual.TextStim(
            win, text='Участник А', font='Courier New',
            pos=(-0.50, 0.31), height=0.045,
            color='#090521', bold=True
        )
        headerRight = visual.TextStim(
            win, text='Участник Б', font='Courier New',
            pos=(0.50, 0.31), height=0.045,
            color='#090521', bold=True
        )

        nextButton = visual.Rect(
            win, width=0.3, height=0.07,
            pos=(0, -0.45), fillColor='#003049'
        )
        nextButtonText = visual.TextStim(
            win, text='Далее', font='Courier New',
            pos=(0, -0.45), height=0.05, color='#f1faee'
        )

        selectionMouse = event.Mouse(win=win)

        print(f'[startupCode] Загружено листов: {totalIdeas} для участника {participantId}')
    CodeComponent initialiseConditions
      Code Type = Auto->JS
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      Begin Experiment:
        skipConfidence = False
        skipSource = False
        ceInstructionCount = 0
        rInstructionCount = 0
        isSourceEmpty = False

        prevBaseItem = ''
        currentBaseItem = ''
        prevRole = ''
        currentRole = ''

        selectedObs = []
        wasPressedObs = False
  Routine item_display
    RoutineSettingsComponent item_display
      saveStartStop = False
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    CodeComponent getCurrentIdeas
      Code Type = Auto->JS
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      Begin Routine:
        currentIndex = currentLoop.thisN
        ideaData = allIdeas[currentIndex]

        print('[getCurrentIdeas] Загружены следующие идеи для участника:', currentIdeas, currentIdeasObs if len(currentIdeasObs) > 0 else '')

        isObserver = (currentRole == 'observation')
        selected = [False] * len(currentIdeas)
        selectedObs = [False] * len(currentIdeasObs)
        wasPressed = False

        firstParticipantName = ''
        secondParticipantName = ''

        if isObserver:
            firstParticipantName = participantName.split('_')[0]
            secondParticipantName = participantName.split('_')[1]

            for i, stim in enumerate(ideaStims):
                stim.pos = (-0.75, 0.25 - i * 0.07)
                stim.wrapWidth = 0.75
                if i < len(currentIdeas):
                    stim.text = f'{i+1}. {currentIdeas[i]}'
                    stim.opacity = 1.0
                else:
                    stim.text = ''
                    stim.opacity = 0.0

            for i, stim in enumerate(ideaStimsObs):
                if i < len(currentIdeasObs):
                    stim.text = f'{i+1}. {currentIdeasObs[i]}'
                    stim.opacity = 1.0
                else:
                    stim.text = ''
                    stim.opacity = 0.0

        else:
            for i, stim in enumerate(ideaStims):
                stim.pos = (-0.75, 0.25 - i * 0.05)
                stim.wrapWidth = 1.7
                if i < len(currentIdeas):
                    stim.text = f'{i+1}. {currentIdeas[i]}'
                    stim.opacity = 1.0
                else:
                    stim.text = ''
                    stim.opacity = 0.0

            for stim in ideaStimsObs:
                stim.text = ''
                stim.opacity = 0.0


        selectionMouse.clickReset()

        currentSource = ideaData['sourceParticipant']
        currentBlockType = ideaData['blockType']
      Each Frame:
        buttons, times = selectionMouse.getPressed(getTime=True)

        if buttons[0]:
            if not wasPressed:
                wasPressed = True
                mousePos = selectionMouse.getPos()

                for i, stim in enumerate(ideaStims):
                    if i < len(currentIdeas) and stim.opacity > 0:
                        if stim.boundingBox is not None:
                            if stim.contains(mousePos):
                                selected[i] = not selected[i]
                if isObserver:
                    for i, stim in enumerate(ideaStimsObs):
                        if i < len(currentIdeasObs) and stim.opacity > 0:
                            if stim.contains(mousePos):
                                selectedObs[i] = not selectedObs[i]

                if nextButton.contains(mousePos):
                    continueRoutine = False

        else:
            wasPressed = False

        for i, stim in enumerate(ideaStims):
            if i < len(currentIdeas):
                stim.color = '#00c853' if selected[i] else '#090521'
            stim.draw()

        if isObserver:
            headerLeft.text = firstParticipantName
            headerLeft.draw()
            headerRight.text = secondParticipantName
            headerRight.draw()
            for i, stim in enumerate(ideaStimsObs):
                if stim.opacity > 0:
                    stim.color = '#00c853' if (i < len(selectedObs) and selectedObs[i]) else '#090521'
                stim.draw()

        nextButton.draw()
        nextButtonText.draw()
      End Routine:
        rememberedIdeas = [
            currentIdeas[i]
            for i in range(len(currentIdeas))
            if selected[i]
        ]

        if isObserver:
            rememberedIdeas += [
                currentIdeasObs[i]
                for i in range(len(currentIdeasObs))
                if selectedObs[i]
            ]

        for i, idea in enumerate(currentIdeas):
            thisExp.addData(f'list_{trials.thisN+1}_idea_{i+1}', idea)
            thisExp.addData(
                f'list_{trials.thisN+1}_remembered_{i+1}',
                'yes' if selected[i] else 'no'
            )

        if isObserver:
            for i, idea in enumerate(currentIdeasObs):
                thisExp.addData(f'list_{trials.thisN+1}_idea_b_{i+1}', idea)
                thisExp.addData(
                    f'list_{trials.thisN+1}_remembered_b_{i+1}',
                    'yes' if selectedObs[i] else 'no'
                )

        confidenceIndex = 0

        print('[pushToArr] Участник отметил следующие идеи:',rememberedIdeas)
    TextComponent ideaQuestionText
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 2
      font = Courier New
      letterHeight = 0.05
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Отметьте именно те идеи, которые, по Вашему мнению, действительно звучали на встрече неделю назад
      wrapWidth = 1.3
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    KeyboardComponent showIdeaProceedButton
      allowedKeys = 'y', 'n'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent storeResponseKey
      Code Type = Auto->JS
  Routine instructions_part_1
    RoutineSettingsComponent instructions_part_1
      saveStartStop = False
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    CodeComponent skipRoutineInstructions
      Code Type = Auto->JS
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      Begin Routine:
        if rInstructionCount >= 1 and currentRole != 'observation':
            continueRoutine = False
        else:
            rInstructionCount += 1

        if currentRole == 'observation':
            instructionFirstPartObserverText.opacity = 1.0
            instructionFirstPartText.opacity = 0
        else:
            instructionFirstPartObserverText.opacity = 0
            instructionFirstPartText.opacity = 1.0
    TextComponent instructionFirstPartText
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 4
      font = Courier New
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      wrapWidth = 1.3
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      text:
        В этой части вам будут показаны все идеи, которые Ваш партнер записал как те идеи, которые, как он считал, были предложены именно им.

        Постарайтесь вспомнить, действительно ли указанная идея была озвучена на предыдущей встрече.
        Кликните на идею, которая, как Вам кажется, была озвучена, чтобы отметить её. Отмеченная идея выделится зеленым цветом. Повторный клик снимает отметку.

        Когда закончите, нажмите кнопку «Далее».

        Нажмите [ПРОБЕЛ] для начала.
    TextComponent instructionFirstPartObserverText
      color = $(-0.9294, -0.9608, -0.7412)
      durationEstim = 4
      font = Courier New
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        В этой части вам будут показаны все идеи, которые участники записали как те идеи, которые, как они считали, были предложены именно ими.

        Постарайтесь вспомнить, действительно ли указанная идея была озвучена на предыдущей встрече.
        Кликните на идею, которая, как Вам кажется, была озвучена, чтобы отметить её. Отмеченная идея выделится зеленым цветом. Повторный клик снимает отметку.

        Когда закончите, нажмите кнопку «Далее».

        Нажмите [ПРОБЕЛ] для начала.
    KeyboardComponent instructionsFirstPartButton
      allowedKeys = 'space'
      discard previous = False
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine prepare_source_routine
    RoutineSettingsComponent prepare_source_routine
      saveStartStop = False
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    CodeComponent prepareSourceRoutine
      Code Type = Auto->JS
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      Begin Routine:
        ideasForSource = [
            idea for idea, score in confidenceScores.items()
            if score != -1 and score < 50
        ]

        sourceRepsN = len(ideasForSource)

        continueRoutine = False
  Routine prepare_ideas
    RoutineSettingsComponent prepare_ideas
      saveStartStop = False
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    CodeComponent getIdeasData
      Code Type = Auto->JS
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      Begin Routine:
        currentIndex = currentLoop.thisN
        ideaData = allIdeas[currentIndex]
        currentRole = ideaData['blockType']
        participantName = ideaData['realName']

        currentIdeas = []
        for i in range(1, 21):
            key = f'idea_{i}'
            val = ideaData.get(key, '').strip()
            if val:
                currentIdeas.append(val)

        currentIdeasObs = []
        if currentRole == 'observation':
            for i in range(1, 21):
                val = ideaData.get(f'idea_b_{i}', '').strip()
                if val:
                    currentIdeasObs.append(val)

        rememberedIdeas = []
        confidenceScores = {}
        sourceTexts = {}
Flow
  Routine startup_routine
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = totalIdeas
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    Routine prepare_ideas
    Routine instructions_part_1
    Routine routine_instructions
    Routine item_display
    Routine confidence_evaluation_instruction
    LoopInitiator confidence_loop loopType="TrialHandler"
      loopType = sequential
      nReps = len(rememberedIdeas)
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      Routine confidence_evaluation
    LoopTerminator confidence_loop
    Routine prepare_source_routine
    LoopInitiator source_loop loopType="TrialHandler"
      loopType = sequential
      nReps = sourceRepsN
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      Routine source_evaluation
    LoopTerminator source_loop
  LoopTerminator trials
  Routine thank_you
